load_file("nrngui.hoc")
secondorder=2 // good for small time-steps

// fixed time-step integration
// dt = .0001 // ms
// variable integration
cvode_active(1)
cvode.atol(1e-5) // was set to 1e-5
cvode.condition_order(2) // 2 is better for NetCon

xopen("1_params.hoc")
xopen("2_geometry.hoc")
xopen("3_conductances.hoc")
xopen("4_stim.hoc")
xopen("5_record.hoc")
xopen("param_sweeps.hoc")

proc run_act(){
    xopen ("act.ses")
    initialize()
    record_start()
    stimul()
    run()
    save_currs("data/currs.txt")
    na_flux = na_flux_node15()
    k_flux = k_flux_node15()
    print "na_flux_node15 ",na_flux," C"
    print "k_flux_node15 ",k_flux," C"
}

proc run_and_record(){
    // run simulation
    initialize()
    record_start()
    stimul()
    run()

    // record ap timing at node[i] in apt[i]
    time10=apt[9].x(0)
    time20=apt[19].x(0)

    // record avg velocity between node 9 and 19
    ave_velocity = -1
    if(time20 > time10){
        ave_velocity= (19-9)*Lsection/((time20-time10)*1000)
    }
    if(ave_velocity>-1){
        //fprint("%f %f %f %f %f %f %f %f %f %f\n",nodal_diameter,axon_diameter,nl*(2*thickness_mycalelin),fiber_diameter,Lsection,9*Lsection,time20-time10,Avg1,nag,kg)
        //printf("%f %f %f %f %f %f %f %f %f %f\n",nodal_diameter,axon_diameter,nl*(2*thickness_myelin),fiber_diameter,Lsection,9*Lsection,time20-time10,Avg1,nag,kg)
        fprint("%f %f %f %f %f %.8f %.8f %f\n",nodal_diameter,axon_diameter,ave_velocity,nag,kg,na_flux_node15(),k_flux_node15(),Lnode) // (Plotting columns 1 & 3 of the output will provide a conduction-velocity vs Nodal-Diameter curve as seen in our paper)
        printf("%f %f %f %f %f %.8f %.8f %f\n",nodal_diameter,axon_diameter,ave_velocity,nag,kg,na_flux_node15(),k_flux_node15(),Lnode)
    }
}

/* Uses a constant 1mm node-node separation distance that has a constant Fiber/Axon Diameter.
For each run, the nodal diameter is increased from .1µm to the diameter of the axon (save myelin).
For each iteration, the conduction velocity is calculated for a given nodal diameter. */
proc run_loop(){
    wopen("data/out.txt")
    fprint("%s %s %s %s %s %s %s %s\n","nodal_diameter","axon_diameter","ave_velocity","nag","kg","na_flux","k_flux","nodal_length")
    printf("%s %s %s %s %s %s %s %s\n","nodal_diameter","axon_diameter","ave_velocity","nag","kg","na_flux","k_flux","nodal_length")

    // change fiber diameter
    xo=20.00
    xf=20.00
    dx=.25
    xmax=(xf-xo)/dx
    for xind=0,xmax {
        fiber_diameter=xo+xind*dx
        set_fiber_diameter_params()

    // change nodal diameter
    yo=.8
    dy=.25
    yf=axon_diameter+dy*2
    ymax=(yf-yo)/dy
    for yind=0,ymax {
        nodal_diameter=yo+yind*dy
        set_nodal_diameter_params()

    // change nodal length
    zo=.6
    dz=.2
    zf=2
    zmax=(zf-zo)/dz
    for zind=0,zmax {
        Lnode = zo+zind*dz
        set_nodal_length_params()

    run_and_record() // run and record velocity
    }}}
}

proc set_nodal_length_params(){
    Lstin=Lsection-(Lnode+2*Lflut+2*Lmysa)
    nag=nag_per_chan*num_sod_chans/(PI*Lnode*(nodal_diameter+nodal_diameter_inc)*10^-8) // ( 10^-8 ---> convert to /cm^2)
    kg=kg_per_ch*num_k_chans/(PI*Lflut*axon_diameter*10^-8)
}

//run_act()
run_loop()